/* PCP-SPL: Pipeline Code Project
 ________________________________________________________________
   ____   ___  ____
  (  _ \ / __)(  _ \ 
   )___/( (__  )___/  Pipeline Code Project
  (__)   \___)(__)    PCP - http://forkstam.se/PCP
 ________________________________________________________________
 Copyright (C) 2007-2009, Christian Forkstam
*/
 #==============================================================#
 # LOADBITMAP                                                   #
 #==============================================================#
 # DESCRIPTION:                                                 #
 #                                                              #
 #   Load or unload bitmap                                      #
 #                                                              #
 # SYNTAX:                                                      #
 #                                                              #
 #   loadbitmap (Load,Pos);                                     #
 #                                                              #
 # OPTION:                                                      #
 #                                                              #
 #   Load = Load/unload bitmap(s) {true|false}                  #
 #   Pos  = Position in bitmap array Bitmaps or all ("All")     #
 #                                                              #
 # EXAMPLE:                                                     #
 #                                                              #
 #   loadbitmap(true,"All");                                    # LOAD ALL BITMAP FILES
 #                                                              #
 #   loop                                                       # LOAD/UNLOAD BLOCK OF BITMAP FILES
 #     int Pos = 1                                              #
 #   until                                                      # LOOP OVER STIMULI IN TRIAL ARRAY ITEM 1
 #     Pos > Items[1][4]                                        #
 #   begin                                                      #
 #     loadbitmap(false,Items[1][4 + Pos]);                     #
 #     Pos = Pos + 1;                                           #
 #   end;                                                       #
 #                                                              #
 # DEPENDENCIES:                                                #
 #                                                              #
 #   SHOWERROR                                                  #
 #                                                              #
 # OBJECTS:                                                     #
 #                                                              #
 #   Bitmap array Bitmaps                                       #
 #                                                              #
 # Last version 23-Oct-2008 00:56:40, Christian Forkstam        #
 #==============================================================#
 sub loadbitmap (                                               # ---INPUT ARGUMENT(S)
     bool   LoadF,                                              #|Load/unload bitmap(s)
     string PosF                                                #|Position in bitmap array Bitmaps
 ) begin                                                        # ---
 if                                                             #|
   Debug                                                        #|
 then                                                           #|
   term.print("RUNNING: LOADBITMAP\n");                         #|
 end;                                                           #|
 #--------------------------------------------------------------#|
                                                                #|
   if                                                           #|Load/unload all pictures in Pics
     PosF == "All"                                              #|
   then                                                         #|
                                                                #|
     loop                                                       #|
       int Pos = 1                                              #|
     until                                                      #|
       Pos > Bitmaps.count()                                    #|
     begin                                                      #|
       if                                                       #|
         LoadF == true                                          #|
       then                                                     #|
         Bitmaps[Pos].load()                                    #|Load
       elseif                                                   #|
         LoadF == false                                         #|
       then                                                     #|
         Bitmaps[Pos].unload()                                  #|Unload
       end;                                                     #|
       Pos = Pos + 1;                                           #|
     end;                                                       #|
                                                                #|
   elseif                                                       #|Load/unload picture in Pics
     PosF != "All"                                              #|
   then                                                         #|
                                                                #|
     if                                                         #|ERROR CHECK
       int(PosF) > Bitmaps.count()                              #|
     then                                                       #|
       showerror("LOADBITMAP:PosF larger than bitmap array " +  #|
         "Bitmaps")                                             #|
     else                                                       #|
       if                                                       #|
         LoadF == true                                          #|
       then                                                     #|
         Bitmaps[int(PosF)].load();                             #|Load
       elseif                                                   #|
         LoadF == false                                         #|
       then                                                     #|
         Bitmaps[int(PosF)].unload();                           #|Unload
       end;                                                     #|
     end;                                                       #|
                                                                #|
   end;                                                         #|
                                                                #|
 end;                                                           # ---
