/* PCP-SPL: Pipeline Code Project
 ________________________________________________________________
   ____   ___  ____
  (  _ \ / __)(  _ \ 
   )___/( (__  )___/  Pipeline Code Project
  (__)   \___)(__)    PCP - http://forkstam.se/PCP
 ________________________________________________________________
 Copyright (C) 2007-2009, Christian Forkstam
*/
 #==============================================================#
 # LOGDATA                                                      #
 #==============================================================#
 # DESCRIPTION:                                                 #
 #                                                              #
 #   Save text to log file                                      #
 #                                                              #
 # SYNTAX:                                                      #
 #                                                              #
 #   logdata (InputData,FileName,Overwrite);                    #
 #                                                              #
 # OPTION:                                                      #
 #                                                              #
 #   InputData = Text to write to file                          #
 #   FileName  = Log file file name                             #
 #   Overwrite = Option true to overwrite file.                 #
 #               Option false to append text to file.           #
 #                                                              #
 # EXAMPLE:                                                     #
 #                                                              #
 #   InputData = "Log text\n";                                  #
 #   FileName  = "Log.res";                                     #
 #   logdata (InputData,FileName,true);                         # OVERWRITE FILE CONTENT
 #   logdata (InputData,FileName,false);                        # APPEND TEXT TO FILE
 #                                                              #
 # DEPENDENCIES:                                                #
 #                                                              #
 #   No dependencies                                            #
 #                                                              #
 # OBJECTS:                                                     #
 #                                                              #
 #   No objects                                                 #
 #                                                              #
 # Last version 23-Oct-2008 01:08:38, Christian Forkstam        #
 #==============================================================#
 sub logdata (                                                  # ---INPUT ARGUMENT(S)
     string InputDataF,                                         #|Log data
     string FileNameF,                                          #|Log file name
     bool   Overwrite                                           #|Overwrite logfile (true) or append (false)
 ) begin                                                        # ---ERROR CHECK: No error check
 if                                                             #|
   Debug                                                        #|
 then                                                           #|
   term.print("RUNNING: LOGDATA\n");                            #|
 end;                                                           #|
 #--------------------------------------------------------------#|
                                                                #|
   output_file Log = new output_file;                           #|Open logfile
                                                                #|
   if                                                           #|Set logfile file name 
     Overwrite == true                                          #|
   then                                                         #|
     Log.open(FileNameF);                                       #|(overwrite)
   elseif                                                       #|
     Overwrite == false                                         #|
   then                                                         #|
     Log.open_append(FileNameF);                                #|(append)
   end;                                                         #|
                                                                #|
   Log.print(InputDataF);                                       #|Append log data
   Log.close();                                                 #|Close logfile
                                                                #|
 end;                                                           # ---
