/* PCP-SPL: Pipeline Code Project
 ________________________________________________________________
   ____   ___  ____
  (  _ \ / __)(  _ \ 
   )___/( (__  )___/  Pipeline Code Project
  (__)   \___)(__)    PCP - http://forkstam.se/PCP
 ________________________________________________________________
 Copyright (C) 2007-2009, Christian Forkstam
*/
 #==============================================================#
 # PRESENTBITMAP                                                # 
 #==============================================================#
 # DESCRIPTION:                                                 #
 #                                                              #
 #   Present bitmaps                                            #
 #                                                              #
 # SYNTAX:                                                      #
 #                                                              #
 #   presentbitmap (Bitmap,Duration,PreLoadedBitmaps,           #
 #                  EventCode,PortCode,SendCode);               #
 #                                                              #
 # OPTION:                                                      #
 #                                                              #
 #   Bitmap           = Bitmaps bitmap object array position    #
 #   Duration         = Duration (ms)                           #
 #   PreLoadedBitmaps = Preloaded bitmap objects {true|false}   #
 #   EventCode        = Event log code                          #
 #   PortCode         = Port code                               #
 #   SendCode         = Send port code {true|false}             #
 #                                                              #
 # EXAMPLE:                                                     #
 #                                                              #
 #   int    Bitmap           = 1;                               # Bitmaps bitmap object array position
 #   int    Duration         = 1000;                            # Duration (ms)
 #   bool   PreLoadedBitmaps = false;                           # Preloaded bitmap objects {true|false}
 #   string EventCode        = "TestBitmapPresentation";        # Event log code
 #   string PortCode         = "000";                           # Port code
 #   bool   SendCode         = false;                           # Send port code {true|false}
 #   presentbitmap(Bitmap,Duration,PreLoadedBitmaps,            #
 #                 EventCode,PortCode,SendCode)                 #
 #                                                              #
 # DEPENDENCIES:                                                #
 #                                                              #
 #   GETTRIAL                                                   #
 #   GETPICURE                                                  #
 #                                                              #
 # OBJECTS:                                                     #
 #                                                              #
 #   Trial object Trial                                         #
 #   Picure object Picture                                      #
 #   Bitmap object array Bitmaps                                #
 #                                                              #
 # Last version 23-Oct-2008 01:16:08, Christian Forkstam        #
 #==============================================================#
 sub presentbitmap (                                            # ---INPUT ARGUMENT(S)
     int    BitmapF,                                            #|Bitmap position in bitmap object array Bitmaps
     int    DurationF,                                          #|Duration (ms)
     bool   PreLoadedBitmapsF,                                  #|Preload bitmap one-by-one or in scenario
     string EventCodeF,                                         #|Event log code
     string PortCodeF,                                          #|Port code
     bool   SendCodeF                                           #|Send port code {true|false}
 ) begin                                                        # ---
 if                                                             #|
   Debug                                                        #|
 then                                                           #|
   term.print("RUNNING: PRESENTBITMAP\n");                      #|
 end;                                                           #|
 #--------------------------------------------------------------#|
                                                                #|
   trial   TrialF = gettrial(Trial);                            #|trial TrialF = Trial
   picture PictureF = getpicture(Picture);                      #|picture PictureF = Picture
   PictureF.clear();                                            #|Clear PictureF
                                                                #|
   if                                                           #|
     PreLoadedBitmapsF == false                                 #|
   then                                                         #|
     Bitmaps[BitmapF].load()                                    #|
   end;                                                         #|Load bitmap file into memory
                                                                #|
   PictureF.add_part( Bitmaps[BitmapF] , 0 , 0 );               #|Set bitmap stimulus
                                                                #|
   if                                                           #|
     DurationF == 0                                             #|
   then                                                         #|
     TrialF.set_duration(forever);                              #|Await button press before continue
   elseif                                                       #|
     DurationF > 0                                              #|
   then                                                         #|
     StimulusEvent.set_delta_time(0);                           #|Start immediately after last stimulus
     TrialF.set_duration(DurationF);                            #|Keep presented for 'Duration' ms
   end;                                                         #|
                                                                #|
   TrialF.set_type(fixed);                                      #|Disregard button press
   StimulusEvent.set_event_code(EventCodeF);                    #|
                                                                #|
   if                                                           #|Set port code
     SendCodeF == true                                          #|
   then                                                         #|
     if                                                         #|
       PortCodeF == "0"   ||                                    #|
       PortCodeF == "XXX" ||                                    #|
       PortCodeF == " "                                         #|
     then                                                       #|
       StimulusEvent.set_port_code(0);                          #|Reset output port code
     elseif                                                     #|
       PortCodeF != "0"   &&                                    #|
       PortCodeF != "XXX" &&                                    #|
       PortCodeF != " "                                         #|
     then                                                       #|
       StimulusEvent.set_port_code(int(PortCodeF));             #|Update code to send over port
     end;                                                       #|
   end;                                                         #|
                                                                #|
   TrialF.present();                                            #|
                                                                #|
   if                                                           #|Unload bitmap file from memory
     PreLoadedBitmapsF == false                                 #|
   then                                                         #|
     Bitmaps[BitmapF].unload()                                  #|
   end;                                                         #|
                                                                #|
 end;                                                           # ---
