/* PCP-SPL: Pipeline Code Project
 ________________________________________________________________
   ____   ___  ____
  (  _ \ / __)(  _ \ 
   )___/( (__  )___/  Pipeline Code Project
  (__)   \___)(__)    PCP - http://forkstam.se/PCP
 ________________________________________________________________
 Copyright (C) 2007-2009, Christian Forkstam
*/
 #==============================================================#
 # READFILE                                                     #
 #==============================================================#
 # DESCRIPTION:                                                 #
 #                                                              #
 #   Open and read a text file                                  #
 #                                                              #
 # SYNTAX:                                                      #
 #                                                              #
 #   string Out = readfile (FileName);                          #
 #                                                              #
 # OPTION:                                                      #
 #                                                              #
 #   FileName = File name                                       #
 #                                                              #
 # EXAMPLE:                                                     #
 #                                                              #
 #   string FileName = "File.txt";                              # File name
 #   string Out = readfile (FileName);                          #
 #                                                              #
 # DEPENDENCIES:                                                #
 #                                                              #
 #   No dependencies                                            #
 #                                                              #
 # OBJECTS:                                                     #
 #                                                              #
 #   No objects                                                 #
 #                                                              #
 # Last version 23-Oct-2008 02:46:53, Christian Forkstam        #
 #==============================================================#
 sub string readfile (                                          # ---INPUT ARGUMENT(S)
     string FileNameF                                           #|File name
 ) begin                                                        # ---
 if                                                             #|
   Debug                                                        #|
 then                                                           #|
   term.print("RUNNING: READFILE\n");                           #|
 end;                                                           #|
 #--------------------------------------------------------------#|
                                                                #|
   input_file File = new input_file;                            #|Declare new input file File
   File.open(FileNameF);                                        #|Open file FileNameF
   string TextStr;                                              #|Declare string TextStr
                                                                #|
   loop                                                         #|Loop over text lines in FileNameF
     int Pos = 1                                                #|
   until                                                        #|
     File.end_of_file() == true                                 #|
   begin                                                        #|
     TextStr = TextStr + File.get_line() + "\n";                #|Update text line from FileNameF
     Pos = Pos + 1;                                             #|
   end;                                                         #|
                                                                #|
   return TextStr;                                              #|Return string TextStr
                                                                #|
 end;                                                           # ---
