/* PCP-SPL: Pipeline Code Project
 ________________________________________________________________
   ____   ___  ____
  (  _ \ / __)(  _ \ 
   )___/( (__  )___/  Pipeline Code Project
  (__)   \___)(__)    PCP - http://forkstam.se/PCP
 ________________________________________________________________
 Copyright (C) 2007-2009, Christian Forkstam
*/
 #==============================================================#
 # RESETSELECTION                                               #
 #==============================================================#
 # DESCRIPTION:                                                 #
 #                                                              #
 #   Reset click selection                                      #
 #                                                              #
 # SYNTAX:                                                      #
 #                                                              #
 #   picture Out = resetselection (NumPositions,Alphabet,       #
 #                                 Positions,FontSize,          #
 #                                 ActiveCentre,CentreText);    #
 # OPTION:                                                      #
 #                                                              #
 #   NumPositions = Number of selection positions               #
 #   Alphabet     = Selection alphabet                          #
 #   Positions    = Selection positions x,y-coordinates         #
 #   FontSize     = Font size                                   #
 #   ActiveCentre = Active centre position to jump reponse      #
 #   CentreText   = Centre text                                 #
 #                                                              #
 # EXAMPLE:                                                     #
 #                                                              #
 #   int    NumPositions = 10;                                  # Number of selection positions
 #   array<string> Alphabet[NumPositions] = {                   # Selection alphabet
 #     "0","1","2","3","4","5","6","7","8","9"};                # 
 #   array<int> Positions[NumPositions][2] = {                  # Selection positions x,y-coordinates
 #     {   0, 200 },{ 118, 162 },{ 190,  62 },{ 190,-62 },      #   POS1-4  {X, Y}
 #     { 118,-162 },{   0,-200 },{-118,-162 },{-190,-62 },      #   POS5-8  {X, Y}
 #     {-190,  62 },{-118, 162 }                                #   POS9-10 {X, Y}
 #   };                                                         # 
 #   int    FontSize     = 50;                                  # Font size
 #   bool   ActiveCentre = true;                                # Active centre position to jump reponse
 #   string CentreText   = "?";                                 # Centre text
 #   picture Picture = resetselection(NumPositions,Alphabet,    #
 #                                    Positions,FontSize,       #
 #                                    ActiveCentre,CentreText); #
 #                                                              #
 # DEPENDENCIES:                                                #
 #                                                              #
 #   GETTEXTARRAY                                               #
 #   GETPICTURE                                                 #
 #   GETBOX                                                     #
 #                                                              #
 # OBJECTS:                                                     #
 #                                                              #
 #   Text object Text                                           #
 #   Picture object Picture                                     #
 #   Box object Box                                             #
 #   TextFont                                                   #
 #                                                              #
 # Last update 13-Mar-2009 00:18:00, Christian Forkstam         #
 # * Updated to handle specific font for selected items         #
 # Last update 06-Nov-2008 11:23:00, Christian Forkstam         #
 # * Fixed bug to use FontSize for selection items              #
 #==============================================================#
 sub picture resetselection (                                   # ---INPUT ARGUMENT(S)
   int              NumPositionsF,                              #|Number of selection positions
   array<string,1>& AlphabetF,                                  #|Selection alphabet
   array<int,2>&    PositionsF,                                 #|Selection positions x,y-coordinates
   int              FontSizeF,                                  #|Font size
   bool             ActiveCentreF,                              #|Active centre position to jump reponse
   string           CentreTextF                                 #|Centre text
 ) begin                                                        # ---
 if                                                             #|
   Debug                                                        #|
 then                                                           #|
   term.print("RUNNING: RESETSELECTION\n");                     #|
 end;                                                           #|
 #--------------------------------------------------------------#|
                                                                #|
   picture ClickPicture = getpicture(Picture);                  #|Get picture object Picture
   ClickPicture.clear();                                        #|Empty picture object ClickPicture
                                                                #|
   box Blank = Boxs[1];                                         #|Assign box object Box to Blank
   Blank.set_height(1);Blank.set_width(1);                      #|
   Blank.set_color(255,255,255);                                #|
   box Red = Boxs[2];                                           #|Assign box object Boxs[2] to Red
   Red.set_height(100); Red.set_width(100);                     #|
   Red.set_color(255,0,0);                                      #|
   box Pointer = Boxs[3];                                       #|Assign box object Boxs[3] to Pointer
   Pointer.set_height(5); Pointer.set_width(5);                 #|
   Pointer.set_color(0,0,0);                                    #|
                                                                #|
   loop                                                         #|Add box Blank over click items
     int Pos = 1                                                #|
   until                                                        #|
     Pos > NumPositionsF                                        #|
   begin                                                        #|
     ClickPicture.add_part( Blank ,                             #|
       PositionsF[Pos][1] , PositionsF[Pos][2] );               #|
     Pos = Pos + 1                                              #|
   end;                                                         #|
                                                                #|
   if                                                           #|Case: ActiveCentre == true
     ActiveCentreF == true                                      #|Add box Blank over centre position
   then                                                         #|
     ClickPicture.add_part( Blank , 0 , 0 );                    #|
   end;                                                         #|
                                                                #|
   loop                                                         #|Loop over click items
     int Pos = 1                                                #|
   until                                                        #|
     Pos > NumPositionsF                                        #|
   begin                                                        #|
     Texts[Pos].set_caption( AlphabetF[Pos] );                  #|Set selection item in position Pos
     Texts[Pos].set_font( TextFont );                           #|Set font
     Texts[Pos].set_font_size( FontSizeF );                     #|Set font size
     Texts[Pos].redraw();                                       #|
     ClickPicture.add_part( Texts[Pos] ,                        #|Set updated text object in click position
       PositionsF[Pos][1] , PositionsF[Pos][2] );               #|
     Pos = Pos + 1;                                             #|
   end;                                                         #|
                                                                #|
   ClickPicture.present();                                      #|Present picture
                                                                #|
   return ClickPicture;                                         #|Return ClickPicture
                                                                #|
 end;                                                           # ---
