/* PCP-SPL: Pipeline Code Project
 ________________________________________________________________
   ____   ___  ____
  (  _ \ / __)(  _ \ 
   )___/( (__  )___/  Pipeline Code Project
  (__)   \___)(__)    PCP - http://forkstam.se/PCP
 ________________________________________________________________
 Copyright (C) 2007-2009, Christian Forkstam
*/
 #==============================================================#
 # SETRESPONSE                                                  #
 #==============================================================#
 # DESCRIPTION:                                                 #
 #                                                              #
 #   Update correct response key in stimulus event object       #
 #     StimulusEvent in trial object Trial                      #
 #                                                              #
 # SYNTAX:                                                      #
 #                                                              #
 #   setresponse (Key,StartTime,StopTime)                       #
 #                                                              #
 # OPTION:                                                      #
 #                                                              #
 #   Key       = Target buttom key                              #
 #   StartTime = Start time (ms)                                #
 #   StopTime  = Stop time (ms, 0 == no stop time)              #
 #                                                              #
 # EXAMPLE:                                                     #
 #                                                              #
 #   int Key       = 3;                                         # Set button 3 as target buttom key
 #   int StartTime = 0;                                         # Start time (ms)
 #   int StopTime  = 0;                                         # No stop time
 #   setresponse (Key,StartTime,StopTime)                       #
 #                                                              #
 # DEPENDENCIES:                                                #
 #                                                              #
 #   No dependencies                                            #
 #                                                              #
 # OBJECTS:                                                     #
 #                                                              #
 #   Stimulus event object StimulusEvent                        #
 #                                                              #
 # Last version 23-Oct-2008 02:54:49, Christian Forkstam        #
 #==============================================================#
 sub setresponse (                                              # ---INPUT ARGUMENT(S)
     int KeyF,                                                  #|Target buttom key
     int StartTimeF,                                            #|Start time
     int StopTimeF                                              #|Stop time (0 == no stop time)
 ) begin                                                        # ---ERROR CHECK: No error check
 if                                                             #|
   Debug                                                        #|
 then                                                           #|
   term.print("RUNNING: SETRESPONSE\n");                        #|
 end;                                                           #|
 #--------------------------------------------------------------#|
                                                                #|
   StimulusEvent.set_target_button(KeyF);                       #|Set response button
   StimulusEvent.set_response_active(true);                     #|Allow nontarget responses
   StimulusEvent.set_stimulus_time_in(StartTimeF);              #|Set response window start time to StartTimeF
                                                                #|
   if                                                           #|Set response window stop time
     StopTimeF == 0                                             #|
   then                                                         #|
     StimulusEvent.set_stimulus_time_out(time_out_never);       #|...with no end time
   else                                                         #|
     StimulusEvent.set_stimulus_time_out(StopTimeF);            #|...or to StopTimeF
   end;                                                         #|
                                                                #|
 end;                                                           # ---
